---
API: 2.1
OpenSesame: 3.3.6b1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "HRI Dance Experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/parallels/Desktop/Parallels Shared Folders/Home/Documents/RU/Human-Robot Interaction/Final Project/Experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background black

define inline_script cleanUp
	set description "Executes Python code"
	set _run "voiceRecognizer.shutDownEngine()"
	set _prepare ""

define loop demoBlock
	set source table
	set repeat 5
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 demo yes
	setcycle 0 interface vocal
	run trial

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run setUp always
	run welcome always
	run demoBlock always
	run cleanUp always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define logger logTrial
	set description "Logs experimental data"
	set auto_log yes

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition never

define inline_script prepareTrialCondition_1
	set description "Executes Python code"
	___run__
	print("Starting trial")
	#clock.sleep(1000)
	
	
	keywordIndex = voiceRecognizer.listen(timeout = 10000)
	
	if keywordIndex is not None and keywordIndex in var.order:
	    transformedIndex = var.order.index(keywordIndex)
	    print(f"Detected {var.keywordOrder[transformedIndex]}")
	    trialCanvas[f"keywordText{transformedIndex}"].color = 'green'
	    trialCanvas.show()
	else:
	    print("No keyword detected, moving on")
	
	print("Ending trial")
	clock.sleep(2000)
	__end__
	___prepare__
	# Create keywords order
	fullRange = list(range(len(var.keywords)))
	random.shuffle(fullRange)
	var.order = fullRange[:var.usedKeywordAmount]
	var.keywordOrder = [var.keywords[i] for i in var.order]
	
	# Create canvas
	yTop = -80
	yStep = 30
	__end__

define sketchpad presentOrder
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[=var.keywordOrder\\[0\\]]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[=var.keywordOrder\\[1\\]]" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[=var.keywordOrder\\[2\\]]" x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[=var.keywordOrder\\[3\\]]" x=0 y=96 z_index=0

define inline_script runTrial
	set description "Executes Python code"
	___run__
	print("Starting trial")
	
	recognizer = None
	if var.interface == 'vocal':
	    recognizer = voiceRecognizer
	assert recognizer is not None, "No valid recognizer set"
	
	trialManager.run(recognizer = recognizer, timeout = 6000)
	
	print("Ending trial, continuing in 2 seconds")
	clock.sleep(2000)
	__end__
	___prepare__
	# Create keywords order
	fullRange = list(range(len(var.keywords)))
	random.shuffle(fullRange)
	var.order = fullRange[:var.usedKeywordAmount]
	
	trialManager = TrialManager(var.order, var.keywords, classHolder)
	trialManager.prepare()
	__end__

define inline_script setUp
	set description "Executes Python code"
	set _run ""
	___prepare__
	import sys
	import random
	import inspect
	
	# Include code location 
	codeFolderLocation = '/home/parallels/Desktop/Parallels Shared Folders/Home/Documents/RU/Human-Robot Interaction/Final Project/Experiment/code'
	sys.path.append(codeFolderLocation)
	
	# Import custom classes
	from VoiceRecognition import VoiceRecognizer
	from TrialManaging import ClassHolder, TrialManager
	
	# Share current environment
	classHolder = ClassHolder(Canvas, Text)
	
	# Start voice recognizer
	var.keywords = ["terminator", "grapefruit", "grasshopper", "blueberry", "alexa", "hey google"]
	var.usedKeywordAmount = 4
	voiceRecognizer = VoiceRecognizer()
	voiceRecognizer.startEngine(keywords = var.keywords)
	__end__

define sequence trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run runTrial always
	run logTrial always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Welcome<br /><br /><small><i>Press any key to continue</i></small>" x=0 y=0 z_index=0

